PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  expName = ResponseText
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextResponseComponent text_response
      multiline = False
      startVal [time (s)] = 0.0
    TextComponent what_am_i_typing
      text [set every frame] = $'what do you have to say?:\n\n' + text_response.text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent submit_on_enter
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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    CodeComponent save_responses
      Begin Experiment:
        # no responses yet, just started
        responses=[]
      End Routine:
        # save the response
        responses.append(text_response.text)
  Routine intro
    TextComponent intro_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You'll get to type a few responses and see them all at the end.

        Press enter to continue
    KeyboardComponent start_on_enter
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine ending
    TextComponent show_all_responses
      text [set every repeat] = $'Your responses:\n\n{}'.format('\n\n'.join(responses))
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent finish_on_enter
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine trial
  LoopTerminator trials
  Routine ending
